(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// **************** Main Components **************************

(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")

(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "EulerTransform")
(Metric "AdvancedMattesMutualInformation")

// ***************** Transformation **************************

(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "false")
(HowToCombineTransforms "Compose")

//Save composite ITK transform
(ITKTransformOutputFileNameExtension "h5")
(WriteITKCompositeTransform "false")

// ******************* Similarity measure *********************

(NumberOfHistogramBins 64)
(ErodeMask "false")

// ******************** Multiresolution **********************

(NumberOfResolutions 3)
(FixedImagePyramidSchedule 8 8 8  4 4 4  1 1 1)
(MovingImagePyramidSchedule 8 8 2  4 4 1  1 1 1) // ACCOUNTING FOR ANISOTROPIC RESOLUTION

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 500)
(MaximumStepLength 1.0)
(RequiredRatioOfValidSamples 0.05)

// **************** Image sampling **********************

(NumberOfSpatialSamples 2000)
(NewSamplesEveryIteration "true")
(ImageSampler "Random")

// ************* Interpolation and Resampling ****************

(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 3)

(DefaultPixelValue -1024)
(WriteResultImage "false")